PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SST b1
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Routines
  Routine B2_Instr
    TextComponent B2_instr_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    KeyboardComponent B2_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent B2_cont_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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  Routine B1_Instr
    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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  Routine B1_Trials
    TextComponent B1_stim_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $B1_stim
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    KeyboardComponent B1_resp
      allowedKeys = 'f''j'
      correctAns = $B1_correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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  Routine B2_Trials
    TextComponent B2_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $B2_stim
    KeyboardComponent B2_resp
      allowedKeys = 'f','j'
      correctAns = $B2_correct
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent B2_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent signal
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Thank_You
    TextComponent thanks_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have finished this task.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent thanks_cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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Flow
  LoopInitiator B1_instr loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = SST_Instr.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_txt', 'During this task, you will see words appear in the middle of the screen. '), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_txt', 'Quickly decide whether the word is an animal or not an animal.\n\nIf the word is an animal, press the "F" key.\nIf the word is not an animal, press the "J" key.'), ('cont_txt', 'Press SPACE to begin.')]),
      OrderedDict([('index', 2), ('instr_txt', None), ('cont_txt', None)]),
      OrderedDict([('index', 3), ('instr_txt', None), ('cont_txt', None)]),
      OrderedDict([('index', 4), ('instr_txt', None), ('cont_txt', None)]),
      OrderedDict([('index', 5), ('instr_txt', None), ('cont_txt', None)]),
      OrderedDict([('index', 6), ('instr_txt', None), ('cont_txt', None)]),
      OrderedDict([('index', 7), ('instr_txt', None), ('cont_txt', None)])]
    Routine B1_Instr
  LoopTerminator B1_instr
  LoopInitiator B1_trials loopType="TrialHandler"
    conditionsFile = SST_B1.xlsx
    loopType = random
    nReps = 24
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    conditions:
      [OrderedDict([('B1_stim', 'Armadillo'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Catepillar'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Frog'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Leopard'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Moose'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Penguin'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Parrot'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Rat'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Sea Lion'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Squirrel'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Toad'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Zebra'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Table'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Subway'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Blueberry'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Lettuce'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Screwdriver'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')])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
    Routine B1_Trials
  LoopTerminator B1_trials
  Routine Thank_You
