PsychoPy2experiment version="3.2.3"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = SST
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Routines
  Routine B2_Instr
    TextComponent B2_instr_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    KeyboardComponent B2_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent B2_cont_txt
      letterHeight = 0.05
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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  Routine B1_Instr
    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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  Routine B1_Trials
    TextComponent B1_stim_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $B1_stim
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    KeyboardComponent B1_resp
      allowedKeys = 'f','j'
      correctAns = $B1_correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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  Routine B2_Trials
    TextComponent B2_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $B2_stim
    KeyboardComponent B2_resp
      allowedKeys = 'f','j'
      correctAns = $B2_correct
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent B2_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent signal
      disabled = True
      sound = A
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
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  Routine Thank_You
    TextComponent thanks_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have finished this task.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent thanks_cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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Flow
  LoopInitiator B1_instr loopType="TrialHandler"
    conditionsFile = SST_Instr.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_txt', 'During this task, you will see words appear in the middle of the screen. '), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_txt', 'Quickly decide whether the word is an animal or not an animal.\n\nIf the word is an animal, press the "F" key.\nIf the word is not an animal, press the "J" key.'), ('cont_txt', 'Press SPACE to begin.')])]
    Routine B1_Instr
  LoopTerminator B1_instr
  LoopInitiator B1_trials loopType="TrialHandler"
    conditionsFile = SST_B1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('B1_stim', 'Armadillo'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Catepillar'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Frog'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Leopard'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Moose'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Penguin'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Parrot'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Rat'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Sea Lion'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Squirrel'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Toad'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Zebra'), ('B1_condition', 'Animals'), ('B1_correct', 'f')]),
      OrderedDict([('B1_stim', 'Table'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Subway'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Blueberry'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Lettuce'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')]),
      OrderedDict([('B1_stim', 'Screwdriver'), ('B1_condition', 'Nonanimals'), ('B1_correct', 'j')])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
    Routine B1_Trials
  LoopTerminator B1_trials
  LoopInitiator B2_instr loopType="TrialHandler"
    conditionsFile = B2_instr.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 2), ('instr_txt', 'Nice Work!'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 3), ('instr_txt', 'In this section, you will see a word in the middle of the screen.'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 4), ('instr_txt', 'Just like in the last section…\n\nIf the word is an animal, press "F".\nIf the word is not an animal, press "J".'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 5), ('instr_txt', 'However, this time, if you hear a tone, \n\nDO NOT press any keys.'), ('cont_txt', 'Press SPACE to begin.')])]
    Routine B2_Instr
  LoopTerminator B2_instr
  LoopInitiator B2_trials loopType="TrialHandler"
    conditionsFile = SST_B2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('B2_stim', 'Antelope'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Anteater'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Aardvark'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Alligator'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Ant'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Baboon'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Badger'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Bear'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Beetle'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Bird'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Bison'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Bobcat'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Buffalo'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Bullfrog'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Bumble Bee'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Butterfly'), ('B2_condition', 'Animals'), ('B2_correct', 'f')]),
      OrderedDict([('B2_stim', 'Buzzard'), ('B2_condition', 'Animals'), ('B2_correct', 'f')])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
    Routine B2_Trials
  LoopTerminator B2_trials
  Routine Thank_You
