PsychoPy2experiment version="3.2.3"
Settings
  Audio lib = pyo
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = b2 only
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Routines
  Routine B2_Instr
    TextComponent B2_instr_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    KeyboardComponent B2_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent B2_cont_txt
      letterHeight = 0.05
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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  Routine B1_Instr
    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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  Routine B1_Trials
    TextComponent B1_stim_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $B1_stim
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    KeyboardComponent B1_resp
      allowedKeys = 'f','j'
      correctAns = $B1_correct
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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  Routine B2_Trials
    TextComponent B2_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $B2_stim
    KeyboardComponent B2_resp
      allowedKeys = 'f','j'
      correctAns = $B2_correct
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent B2_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume [set every repeat] = $sig_volume
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  Routine Thank_You
    TextComponent thanks_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have finished this task.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent thanks_cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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Flow
  LoopInitiator B2_instr loopType="TrialHandler"
    conditionsFile = B2_instr.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 2), ('instr_txt', 'Nice Work!'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 3), ('instr_txt', 'In this section, you will see a word in the middle of the screen.'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 4), ('instr_txt', 'Just like in the last section…\n\nIf the word is an animal, press "F".\nIf the word is not an animal, press "J".'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 5), ('instr_txt', 'However, this time, if you hear a tone, \n\nDO NOT press any keys.'), ('cont_txt', 'Press SPACE to begin.')])]
    Routine B2_Instr
  LoopTerminator B2_instr
  LoopInitiator B2_trials loopType="TrialHandler"
    conditionsFile = SST_B2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('B2_stim', 'Antelope'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', 1.0)]),
      OrderedDict([('B2_stim', 'Anteater'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', 0.0)]),
      OrderedDict([('B2_stim', 'Aardvark'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', 1.0)]),
      OrderedDict([('B2_stim', 'Alligator'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', 0.0)]),
      OrderedDict([('B2_stim', 'Ant'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Baboon'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Badger'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Bear'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Beetle'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Bird'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Bison'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Bobcat'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)]),
      OrderedDict([('B2_stim', 'Buffalo'), ('B2_condition', 'Animals'), ('B2_correct', 'f'), ('sig_volume', None)])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
    Routine B2_Trials
  LoopTerminator B2_trials
  Routine Thank_You
